Journal
Description: New Journal
Version VersionNumber=2.4
Select Image
  im = m 1 5 10 0 1 -1 -1 9 "LSMfile"
  prompt = ""
Assign Variable
  SaveName = Image.FileName
New
  nWidth = 512
  nHeight = 512
  nDepth = 3
  nGray = 0
  nName = "TEMP"
  imNew = m 1 2 9 2 1 -1 -1 8 Untitled
  r = 0
  g = 0
  b = 0
  r16 = 0
  g16 = 0
  b16 = 0
Save As
  imSave = "TEMP"
  fSpec = "D:\Minghan\alignment\TEMP.tif"
  nParm = 0
  m_formatID = 336
Assign Variable
  SavePath2 = Image.FileDrive  + Image.FileDir  
Close
  im = "TEMP"
  bSaveIt = FALSE
Select Image
  im = m 1 5 10 0 1 -1 -1 8 Untitled
  prompt = ""
Auto Align
  nSourceTypeIndex = 1
  imStack = m 1 5 10 0 1 -1 -1 8 Untitled
  imResult = "Auto Align"
  nReferencePlane = 1
  stSourceNDDataSet = "F:\Projects\Matrix pinching project\ECM displacement experiments\170330-MYH10-PS\170330-MYH10-PS-SD2-TL2.ND"
  stDestNDDataSet = "F:\Projects\Matrix pinching project\ECM displacement experiments\170330-MYH10-PS\170330-MYH10--TL-2-aligned-pos2\170330-MYH10--TL-2-aligned-pos2.ND"
  nNDImageSetIndex = 1
  nNDWavelengthIndex = 2
  nNDStagePositionIndex = 10
  nNDStagePositionAlignmentType = 1
  bAllowRotation = FALSE
  dMinimumRotationInDegrees = 0
  dMaximumRotationInDegrees = 0
  dRotationIncrementInDegrees = 0.1
Select Image
  im = m 1 3 10 0 1 -1 -1 9 "LSMfile"
  prompt = ""
Assign Variable
  Image.FilePath = SavePath2 + SaveName + "_aligned" + ".tif"
Save
  imSave = m 1 7 9 0 1 8 0 8 Untitled
  nParm = 0
Close All
  nCloseAllOption = 1
